% # iNMDA_PYdr_PYso_B12:
%
% Normalized synaptic NMDAergic excitatory current FROM the
%     pyramidal axo-soma TO pyramidal dendrite PYdr<-PYso_B12 connection used in
%     the DynaSim implementation of (Benita et al., 2012). Note that in the
%     original code, the class for this current is called NMDA_D1, PYso_B12 are
%     called CX or CX_SOMA, and PYdr are called CX or CX_DEND. Also note that,
%     instead of using a Heaviside increase in transmitter concentration upon
%     spike detection, we used the (1 + tanh(V/4)) formulation from (Ermentrout
%     & Kopell, 1998) for our spike detector and transmitter concentration
%     model.
%
% - References:
%     - Benita, J. M., Guillamon, A., Deco, G., & Sanchez-Vives, M. V. (2012).
%     Synaptic depression and slow oscillatory activity in a biophysical
%     network model of the cerebral cortex. Frontiers in Computational
%     Neuroscience, 6. https://doi.org/10.3389/fncom.2012.00064
%     - Ermentrout GB, Kopell N. Fine structure of neural spiking and
%     synchronization in the presence of conduction delays. Proceedings of the
%     National Academy of Sciences. 1998;95: 1259–1264.
%
% - Tags: synapse, connection, excitation
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
%
gNMDA = 0.006 % mS/cm^2

ENMDA = 0    % mV

Rinf = 0.72

sIC = 0
sNoiseIC = 0

% Note that alpha rate here corresponds to the inverse of the rise  time constant, 1/tauR, and
%        the beta rate here corresponds to the inverse of the decay time constant, 1/tauD
alpha = 1      % ms^-1
beta  = 0.0067 % ms^-1

% Connective radius, aka how many target cells each source cell connects to,
%     from the source's perspective.
radius = 5

% We also need to normalize the conductance in mS/cm^2 by the number of
%     connections each target cell is receiving on average, so that the TOTAL sum
%     of their conductive inputs adds to our overall maximal conductance above.
% AES
% normalizingFactor = min(((2*radius + 1) / (N_post/N_pre)), N_pre)
normalizingFactor = 10


% Functions
% Remove autapses to the dendrite corresponding to this soma
removeRecurrentBool = 1
% Note that what is passed is 2x the radius
netcon = netconNearestNeighbors(2*radius, N_pre, N_post, removeRecurrentBool)

weirdFunction(voltage) = 1./(1+exp(-(voltage - (-25))./12.5))

INMDA_PYdr_PYso_B12(X,s) = -gNMDA/normalizingFactor.*(s*netcon).*weirdFunction(X).*(X-ENMDA)

% This way we record the synaptic currents!
monitor INMDA_PYdr_PYso_B12

% ODEs and ICs
s' = alpha.*Rinf.*0.5.*(1 + tanh(X_pre./4)).*(1-s) - beta.*s
s(0) = sIC+sNoiseIC.*rand(1,N_pre)

% Linker
@current += INMDA_PYdr_PYso_B12(X_post,s)
